macro StitchingLoop40even{

/////////////////////////////////////////////////////////////////////////////////////////////////////////////////
//Asking for the directory where are the folders with the images to be stitched
mainDirectory = "/projects/0/einf914/data/" ;

list = getFileList(mainDirectory);
//Stitching parameters
fileNames       = "Img_r{yy}_c{xx}.tif";

overlap         = "20";  

gridSizeX       = "15"
gridSizeY       = "10"
gridSizeZ       = "1"

startX          = "1"
startY          = "1"

fal             = "1";
rth             = "0.1";
mdt             = "6";
adt             = "6";
/////////////////////////////////////////////////////////////////////////////////////////////////////////////////


/////////////////////////////////////////////////////////////////////////////////////////////////////////////////

for (i=0; i<=list.length-1; i=i+1){
	 if(startsWith(list[i],"20200705_0357_Plate13")) {
		outputDirectory = mainDirectory + File.separator + list[i];
		if(File.exists(outputDirectory + File.separator + "StitchedImage.tif") == 0){ 
			print(list[i]);
			inputDirectory  = outputDirectory + File.separator + "Img";
			inputDirectory2  = outputDirectory + File.separator + "Img2";
			File.makeDirectory(inputDirectory2);
			listImg = getFileList(inputDirectory);
			
			for (j=0; j<=listImg.length-1; j++){
				if(startsWith(listImg[j],"Img_r")){
					open(inputDirectory + File.separator + listImg[j]);
					run("Subtract Background...", "rolling=200 light");
					wait(100);
					saveAs("Tiff", inputDirectory2 + File.separator + listImg[j]);
					wait(100);
					close();
				}
			}
			
			run("Stitch Sequence of Grids of Images", "grid_size_x=" + gridSizeX + " grid_size_y=" + gridSizeY + " grid_size_z=" + gridSizeZ + " overlap=" + overlap + " input=" + inputDirectory2 + " file_names=" + fileNames + " rgb_order=rgb output_file_name=TileConfiguration.txt output=" + outputDirectory + " start_x=" + startX + " start_y=" + startY + " start_z=1 start_i=1 channels_for_registration=[Red, Green and Blue] fusion_method=[Linear Blending] fusion_alpha=" + fal + " regression_threshold=" + rth + " max/avg_displacement_threshold=" + mdt + " absolute_displacement_threshold=" + adt + " compute_overlap");			
			File.rename(outputDirectory + File.separator + "Stitched Image_1.tif" , outputDirectory + File.separator + "StitchedImage.tif");
			open(outputDirectory + File.separator + "StitchedImage.tif");
			run("Size...", "width=2620 depth=1 constrain average interpolation=Bilinear");
			saveAs("Tiff", outputDirectory + File.separator + "StitchedImage.tif");
			close();
			
			File.copy(inputDirectory2 + File.separator + "TileConfiguration.txt", inputDirectory + File.separator + "TileConfiguration.txt");
			File.copy(inputDirectory2 + File.separator + "TileConfiguration.txt.registered", inputDirectory + File.separator + "TileConfiguration.txt.registered");
			
			listImg2 = getFileList(inputDirectory2);
			for (j=0; j<=listImg2.length-1; j++){
				x = File.delete(inputDirectory2 + File.separator + listImg2[j]);
			}
			x = File.delete(inputDirectory2);
			
			wait(1000);
		}
	}
}
//end Stitching loop
/////////////////////////////////////////////////////////////////////////////////////////////////////////////////
}